load_file("nrngui.hoc")
load_file("cell.hoc")

objref cell1, cell2

cell1 = new rall1(0,0,0,20)
cell2 = new rall1(10,10,10,20)

objref syn
objref stim
objref nclist, nc

nclist = new List()
stim = new NetStim(0.5)
stim.start = 20
stim.number = 2
stim.interval = 20
stim.noise = 0
nc = new NetCon(stim,cell1.synlist.o(0),0,0,0.8)
nclist.append(nc)

syn = cell2.makeSyn(0,1,100,10,0,101,120,0,0.5)
cell1.axon {
    nc = new NetCon(&v(1),syn,0,0,1)
    nclist.append(nc)
}

//save detail section now under construction
objref vvec,tvec
vvec = new Vector()
tvec = new Vector()

load_file("graph.ses")
dt = 0.025
tstop = 50
run()